PsychoPy2experiment version="3.0.0b11"
Settings
  Completed URL = completedURL
  Data filename = 'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': '', 'gender (m/f)': '', 'age': '', 'session': '004'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  expName = bart
  logging level = warning
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Routines
  Routine trial
    CodeComponent updateEarnings
      Code Type = JS
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      Begin JS Experiment:
        bankedEarnings = 0.0;
        balloonEarnings = '';
        bankedText = '';
        lastBalloonEarnings = 0.0;
        thisBalloonEarnings = 0.0;
      Each JS Frame:
        thisBalloonEarnings=nPumps*0.05;
        balloonEarnings = "This balloon value:\n£" + thisBalloonEarnings.toFixed(2);
        bankedText = "You have banked:\n£" + bankedEarnings.toFixed(2);
      End JS Routine:
        //calculate cash 'earned'
        if (popped) {
          thisBalloonEarnings=0.0;
          lastBalloonEarnings=0.0;
        } else {
          lastBalloonEarnings=thisBalloonEarnings;
        }
        bankedEarnings = bankedEarnings + lastBalloonEarnings
    CodeComponent setBalloonSize
      Code Type = JS
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      Begin JS Experiment:
        balloonSize=0.08;
        balloonMsgHeight=0.01;
      Begin JS Routine:
        balloonSize=0.08;
        popped=false;
        nPumps=0;
        balloonBody.ori = 90;
      Each JS Frame:
        balloonSize=0.1+nPumps*0.015;
      End JS Routine:
        //save data
        psychoJS.experiment.addData('nPumps', nPumps);
        psychoJS.experiment.addData('size', balloonSize);
        psychoJS.experiment.addData('earnings', thisBalloonEarnings);
        psychoJS.experiment.addData('popped', popped);
    ImageComponent balloonBody
      image = redBalloon.png
      ori = -90
      pos [set every frame] = [0, balloonSize/2-.5]
      size [set every frame] = balloonSize
      startVal [time (s)] = 0.0
      units = height
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    TextComponent reminderMsg
      letterHeight = 0.025
      pos = [0, -0.8]
      startVal [time (s)] = 0.0
      units = height
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      text:
        Press SPACE to pump the balloon
        Press RETURN to bank this sum
    TextComponent balloonValMsg
      letterHeight = 0.025
      pos = [0,0.05]
      startVal [time (s)] = 0.0
      text [set every frame] = $balloonEarnings
      units = height
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    TextComponent bankedMsg
      letterHeight = 0.025
      pos = [0, 0.8]
      startVal [time (s)] = 0.0
      text [set every frame] = $bankedText
      units = height
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    CodeComponent checkKeys
      Code Type = JS
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      Each JS Frame:
        var thisResp = psychoJS.eventManager.getKeys();
        console.log(thisResp)
        if ("space" == thisResp[0]) {
            nPumps = nPumps+1;
            if (nPumps > maxPumps) {
                popped=true;
                continueRoutine=false;
            }
        }

        if ("return" == thisResp[0]) {
            popped=false;
            continueRoutine=false;
        }
    KeyboardComponent bankButton
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine finalScore
    CodeComponent finalScoreCode
      Code Type = JS
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      Begin JS Routine:
        scoreText="Well done! You banked a total of\n£" + bankedEarnings.toFixed(2);
    TextComponent finalScore_2
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      text [set every repeat] = $scoreText
      units = height
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    KeyboardComponent doneKey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
    CodeComponent checkPopped
      Code Type = JS
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      Begin JS Experiment:
        feedbackText=""

        //bang = new Sound({
        //    win: psychoJS.window,
        //    value: 'A',//"resources/bang.wav",
        //    secs: 1.0,
        //    });

        //bang.setVolume(1);

        balloonBody.setSize(0.10)
      Begin JS Routine:
        if (popped == true) {
            feedbackText = "Oops! Lost that one!";
        } else {
            feedbackText="You banked £" + lastBalloonEarnings.toFixed(2);
        }
    TextComponent feedbackMsg
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $feedbackText
      units = height
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  Routine instructions
    TextComponent instrMessage
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      units = height
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      text:
        This is a game where you have to optimise your earnings in a balloon pumping competition.

        You get prize money for each balloon you pump up, according to its size. But if you pump it too far it will pop and you'll get nothing for that balloon.

        Balloons differ in their maximum size - they can occasionally reach to almost the size of the screen but most will pop well before that.

        Press
            SPACE to pump the balloon
            RETURN to bank the cash for this balloon and move onto the next
    KeyboardComponent resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = 1
    random seed = 1832
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    conditions:
      [{'imageFile': 'blueBalloon.png', 'maxPumps': 2},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 8},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 14},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 20},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 26},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 32},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 38},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 44},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 50},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 56},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 62},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 68},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 74},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 80},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 86},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 92},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 98},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 104},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 110},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 116}]
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine finalScore
